PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [1920, 1200]
  color = 1.0000, 1.0000, 1.0000
  expName = final_task
  exportHTML = manually
  frameRate = 60
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine presentation
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    ImageComponent image
      image [set every repeat] = $monkeyFace
      size = (None,0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    SoundComponent sound_1
      sound [set every repeat] = $monkeySound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine test
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    PolygonComponent triangle
      fillColor = 1.0000, 1.0000, -1.0000
      pos = (-0.3, 0)
      shape = triangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent square
      fillColor = -1.0000, -1.0000, 1.0000
      pos = (0.3,0)
      shape = rectangle
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = $correctAnswer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine dispense
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    PelletDispenserComponent reward
      count = 1
      endRoutineOnDispense = True
      saveStats = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = final_task_conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('monkeyFace', 'resources/happy_monkey.png'), ('monkeySound', 'resources/happy_monkey.mp3'), ('correctAnswer', 'square')]),
      OrderedDict([('monkeyFace', 'resources/sad_monkey.png'), ('monkeySound', 'resources/sad_monkey.mp3'), ('correctAnswer', 'triangle')])]
    Routine presentation
    Routine test
    Routine dispense
  LoopTerminator trials
