PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [1920, 1200]
  color = 1.0000, 1.0000, 1.0000
  expName = task_0
  keyboardBackend = Pyglet
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      shape = rectangle
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        manual_dispense = False
      Begin Experiment:
        global manual_dispense
        manual_dispense = False
      Begin Routine:
        manual_dispense = False
      Each Frame:
        if manual_dispense is True:
            continueRoutine = False
      End Routine:
        if manual_dispense is True:
            trials.addData('manual_dispense','Y')
        else:
            trials.addData('manual_dispense','N')
  Routine reward
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    PelletDispenserComponent dispense
      count = 1
      endRoutineOnDispense = True
      saveStats = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine trial
    Routine reward
  LoopTerminator trials
