PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['group'], expName, expInfo['date'])
  Experiment info = {'participant': '"unidentified"', 'group': '"unidentified"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Use version = 2024.1.4
  Window size (pixels) = [1920, 1200]
  color = 1.0000, 1.0000, 1.0000
  expName = task_2_revB
  frameRate = 60.0
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, 1.0000
      pos [set every repeat] = $(random(2) - 0.5)/2
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        manual_dispense = False
      Begin Experiment:
        global manual_dispense
      Begin Routine:
        manual_dispense = False
      Each Frame:
        if manual_dispense is True:
            continueRoutine = False
      End Routine:
        if manual_dispense is True:
            trials.addData('manual_dispense','Y')
        else:
            trials.addData('manual_dispense','N')
  Routine reward
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    PelletDispenserComponent dispense
      count = 1
      endRoutineOnDispense = True
      saveStats = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 30
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    Routine trial
    Routine reward
  LoopTerminator trials
