PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = touch_reward
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine touchTarget
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, 1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = polygon
      correctAns = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine reward
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    PelletDispenserComponent dispense
      count [set every repeat] = $randint(2)
      endRoutineOnDispense = True
      saveStats = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $randint(4)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine touchTarget
    Routine reward
  LoopTerminator trials
