PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = simple
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PelletDispenserComponent reward
      count = 1
      endRoutineOnDispense = True
      saveStats = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image
      image = 000.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine trial
